<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ClearColor</MemberName>
        <Name>ClearColor</Name>
        <Category>Misc</Category>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderTexture">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:Width xsi:nil="true" />
          <gl:Height xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:WrapS>ClampToEdge</gl:WrapS>
          <gl:WrapT>ClampToEdge</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>Gamma</gl:ShaderName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>GammaLut</Name>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="gl:LoadImage,sys:String">
        <MemberName>FileName</MemberName>
        <Value />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LoadImage">
          <gl:Width xsi:nil="true" />
          <gl:Height xsi:nil="true" />
          <gl:InternalFormat>Rgba</gl:InternalFormat>
          <gl:WrapS>ClampToEdge</gl:WrapS>
          <gl:WrapT>ClampToEdge</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
          <gl:FileName />
          <gl:ColorType>Unchanged</gl:ColorType>
          <gl:FlipMode>Vertical</gl:FlipMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture1</gl:TextureSlot>
          <gl:ShaderName>Gamma</gl:ShaderName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Gamma</gl:ShaderName>
          <gl:MeshName>ViewportQuad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>