<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Draws a parameterized checkerboard stimulus.</Description>
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:;assembly=Extensions" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Checkerboard</q1:ShaderName>
          <q1:MeshName>Quad</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ExtentX</MemberName>
        <Name>ExtentX</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ExtentY</MemberName>
        <Name>ExtentY</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>LocationX</MemberName>
        <Name>LocationX</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>LocationY</MemberName>
        <Name>LocationY</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Columns</MemberName>
        <Name>NumberColumns</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Rows</MemberName>
        <Name>NumberRows</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Phase</MemberName>
        <Name>Phase</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Angle</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AngleProperty">
          <q2:Value>0</q2:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>Angle</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PhaseFrequency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>frequency</q1:UniformName>
                <q1:ShaderName>Checkerboard</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateVector2">
                <q1:X>3</q1:X>
                <q1:Y>3</q1:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>phase</q1:UniformName>
                <q1:ShaderName>Checkerboard</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Phase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Columns</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Rows</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>3</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source3</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Angle</MemberName>
              <Name>Angle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Checkerboard</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name>ExtentX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name>ExtentY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:RotateZ">
                <q1:Order>Prepend</q1:Order>
                <q1:Angle>0</q1:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Scale">
                <q1:Order>Prepend</q1:Order>
                <q1:X>1</q1:X>
                <q1:Y>1</q1:Y>
                <q1:Z>1</q1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Translate">
                <q1:Order>Prepend</q1:Order>
                <q1:X>0</q1:X>
                <q1:Y>0</q1:Y>
                <q1:Z>0</q1:Z>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>8</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>9</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>9</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>10</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>10</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>14</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>14</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>14</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>13</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>13</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>13</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>14</To>
        <Label>Source6</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>AngleProperty, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector2, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateZ, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Translate, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>